WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath(DisplayName=TaskPath), RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\Hardware.bonsai)

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #23
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #24
    #23, #24 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    Unit => #28
    ExternalizedMapping(Value(DisplayName=RefreshEnvironmentRate)) => #29
    #28, #29 -> TimeSpanProperty(Value=PT0.1S)
    -> Take(Count=1)
    -> AsyncSubject RefreshEnvironmentRate

    SubscribeSubject SubjectSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #34
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #37
    #34, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.Patch> GlobalActivePatch
    BehaviorSubject<AindVrForagingDataSchema.VirtualSite> GlobalActiveSite
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BehaviorSubject<PatchState> GlobalPatchState
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GlobalPatchState)
    -> MulticastSubject SoftwareEvent

    GroupWorkflow Position
        BehaviorSubject<Bonsai.Harp.Timestamped(OpenTK.Vector3)> CurrentPosition
        BehaviorSubject<Bonsai.Harp.Timestamped(System.Boolean)> IsStopped
        BehaviorSubject<OpenTK.Vector3> MaxPosition
        BehaviorSubject<System.Double> StopVelocityThreshold
        BehaviorSubject<System.Tuple(System.Double,System.Double)> FilteredCurrentVelocity

    BooleanProperty(Value=false)
    -> Take(Count=1) => #14
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #17
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #20
    #14, #17, #20 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

IncludeWorkflow(Path=Extensions\HardwareChecks.bonsai)

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #8
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #10
#8, #10 -> TakeUntil => #11
SubscribeSubject StartLogging => #12
#11, #12 -> SubscribeWhen

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\OperationControl.bonsai)

Defer TaskLogic => #16
    IncludeWorkflow(Path=Extensions\CorridorFactory.bonsai, CorridorLength=120, CorridorWidth=40, CorridorHeight=30)
    IncludeWorkflow(Path=Extensions\PositionControl.bonsai)

    Annotation(Text="")
    -> IncludeWorkflow(Path=Extensions\VariableUpdaters.bonsai)

    Defer PatchStateMachine
        BehaviorSubject<AindVrForagingDataSchema.Block> CurrentBlock
        BehaviorSubject<AindVrForagingDataSchema.Patch> ActivePatch

        SubscribeSubject ActivePatch
        -> MulticastSubject GlobalActivePatch

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=Environment)
        -> AsyncSubject Blocks

        SubscribeSubject Blocks
        -> IncludeWorkflow(Path=Extensions\SolveBlockTransitions.bonsai) => #8
        Annotation "Updates asynch"(Text="") => #9
        #8, #9 -> MulticastSubject CurrentBlock
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Block)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject CurrentBlock
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject CurrentBlock
        -> CreateObservable WithinBlockLogic
            SubscribeSubject CurrentBlock
            -> MemberSelector(Selector=EnvironmentStatistics.FirstStateOccupancy) => #1
            SubscribeSubject TransitionMatrix => #2
            #1, #2 -> Zip => #3
            SubscribeSubject RngSeed
            -> PropertyMapping(Random) => #5
            #3, #5 -> DrawFirstState
            -> Take(Count=1)
            -> BehaviorSubject ActiveStateIndex

            IncludeWorkflow(Path=Extensions\PatchManagement.bonsai)
            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> ActiveSite

            SubscribeSubject ActiveSite
            -> MulticastSubject GlobalActiveSite

            SubscribeSubject ActiveStateIndex
            -> SelectMany UpdatePatch
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject idx

                SubscribeSubject PatchStatistics => #3
                SubscribeSubject idx
                -> PropertyMapping(Value) => #5
                #3, #5 -> Index(Operand=IntProperty(Value=0))
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject ActivePatch

            SubscribeSubject ActivePatch
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ActivePatch)
            -> MulticastSubject SoftwareEvent

            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

            Bonsai.Shaders.Timer(DueTime=PT0S)
            -> Take(Count=1) => #23
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterPatch)
            -> PropertyMapping => #26
              Label(Selector=Label)
              Contrast(Selector=RenderSpecification.Contrast)
              LengthDistribution(Selector=LengthDistribution)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #23, #26 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai, Contrast=nil, Label=Unspecified)
            -> SelectMany Patch => #28
                WorkflowInput Source1
                -> Take(Count=1)
                -> BehaviorSubject EntrySite

                SubscribeSubject EntrySite
                -> Take(Count=1) => #4
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterSite)
                -> PropertyMapping => #7
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #4, #7 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Contrast=nil, Label=Unspecified)
                -> BehaviorSubject FirstPatchSite

                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> BehaviorSubject IsTerminated

                BehaviorSubject<System.Boolean> SiteHasChoice

                Defer PatchTerminationLogic
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=PatchTerminators)
                    -> Merge => #2
                    -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnRejection>)
                    -> CreateObservable PatchTerminatorOnRejection => #4
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject SiteHasChoice
                        -> BitwiseNot
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> IntProperty(Value=1)
                        -> Accumulate => #6
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #8
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #10
                        #8, #10 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #12
                        #6, #12 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #16
                        #14, #16 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnReward>)
                    -> CreateObservable PatchTerminatorOnReward => #6
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject HotGiveReward
                        -> IntProperty(Value=1)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnChoice>)
                    -> CreateObservable PatchTerminatorOnChoice => #8
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject HotChoiceFeedback
                        -> IntProperty(Value=1)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnTime>)
                    -> CreateObservable PatchTerminatorOnTime => #10
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        Bonsai.Shaders.RenderFrame
                        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #4, #6, #8, #10 -> Merge
                    -> Merge
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item1)
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:PublishSoftwareEvent.bonsai, EventName=PatchTerminationEvent)
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                -> MulticastSubject IsTerminated

                SubscribeSubject FirstPatchSite
                -> Take(Count=1)
                -> Condition NotIsTerminated => #18
                    WorkflowInput Source1 => #0
                    SubscribeSubject IsTerminated => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.RewardSite)
                -> PropertyMapping => #21
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #18, #21 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai, Contrast=nil, Label=Unspecified) => #22
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterSite)
                -> PropertyMapping => #25
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #22, #25 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Contrast=nil, Label=Unspecified)
                -> SelectMany WaitForSiteOutcome => #27
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject PreviousSite

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject PreviousSite
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #8
                    #5, #8 -> CombineLatest
                    -> GreaterThan
                    -> Condition => #11
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject PreviousSite => #12
                    BooleanProperty(Value=false)
                    -> Take(Count=1) => #14
                    SubscribeSubject HotChoiceFeedback
                    -> BooleanProperty(Value=true) => #16
                    #14, #16 -> Merge => #17
                    #11, #12, #17 -> CombineLatest
                    -> Take(Count=1)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item2 as PreviousSite,
                        it.Item3 as SiteHasChoice)
                    -> WorkflowOutput
                -> MemberSelector(Selector=PreviousSite)
                -> MulticastSubject FirstPatchSite => #29
                #27 -> MemberSelector(Selector=SiteHasChoice)
                -> MulticastSubject SiteHasChoice => #31
                #29, #31 -> Zip
                -> MemberSelector(Selector=Item1)
                -> Take(Count=1)
                -> Repeat
                -> Condition IsTerminated
                    WorkflowInput Source1 => #0
                    SubscribeSubject IsTerminated => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition HasPostPatch
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
                  Expression: it == null
                -> BitwiseNot => #4
                #0, #4 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> SelectMany PostPatchLogic => #30
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> PropertyMapping => #3
                  Label(Selector=Label)
                  Contrast(Selector=RenderSpecification.Contrast)
                  LengthDistribution(Selector=LengthDistribution)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #0, #3 -> IncludeWorkflow(Path=Extensions\AddPostPatchSite.bonsai, Contrast=nil, Label=Unspecified)
                -> SelectMany WaitForSiteOutcome
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject PreviousSite

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject PreviousSite
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #8
                    #5, #8 -> CombineLatest
                    -> GreaterThan
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1) => #12
                    SubscribeSubject PreviousSite => #13
                    #12, #13 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> WorkflowOutput
            #28 -> Condition HasNotPostPatch => #31
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull => #3
                  Expression: it == null
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            #30, #31 -> Merge
            -> Unit
            -> MulticastSubject EvaluateBlockEndConditions
            -> SelectMany SampleFromTransitionMatrix
                SubscribeSubject TransitionMatrix => #0
                SubscribeSubject ActiveStateIndex => #1
                #0, #1 -> Zip => #2
                SubscribeSubject RngSeed
                -> PropertyMapping(Random) => #4
                #2, #4 -> DrawFromTransitionMatrix
                -> MulticastSubject ActiveStateIndex
                -> Take(Count=1)
                -> WorkflowOutput
            -> Repeat
        -> Switch
SubscribeSubject EndExperiment => #17
#16, #17 -> TakeUntil => #18
SubscribeSubject StartExperiment => #19
#18, #19 -> SubscribeWhen

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\Visualizers.bonsai)

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    SubscribeSubject olfactometerChannelsCount
    -> PropertyMapping(Count)
    -> Range(Start=0, Count=0)
    -> DoubleProperty(Value=0)
    -> ToArray => #4
    SubscribeSubject olfactometerChannelsCount
    -> PropertyMapping(OlfactometerChannelCount) => #6
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
    -> PropertyMapping(PerOdorFlow) => #9
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
    -> PropertyMapping(TotalFlow) => #12
    #4, #6, #9, #12 -> CreateHubOdorMixture(PerOdorFlow=100, TotalFlow=1000, OlfactometerChannelCount=3)
    -> MulticastSubject SetOdorMix
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState => #16
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #19
    Defer ZeroYAxis => #20
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=AxisConfiguration)
        -> Merge
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Axis) => #1
            -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1)) => #2
            #1 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2)) => #3
            #2, #3 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> SelectMany ZeroAxis
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject axisConfiguration

            SubscribeSubject axisConfiguration
            -> MemberSelector(Selector=Axis)
            -> Bonsai.Scripting.Expressions.ExpressionTransform OffsetRegister85
              Expression: it + 85
            -> Take(Count=1)
            -> AsyncSubject TargetRegister

            SubscribeSubject TargetRegister
            -> PropertyMapping(Address)
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=0, PayloadType=S32, Value=0))
            -> MulticastSubject StepperDriverCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #16, #19, #20 -> Zip
    -> Take(Count=1) => #22
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #25
    #22, #25 -> Zip
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
