WorkflowBuilder(Version=2.8.1)
Timer(DueTime=PT1S, Period=PT0S)
-> SelectMany "Start of Harvest Location" => #1
    SubscribeSubject FindLocation
    -> IntProperty(Value=100)
    -> PropertyMapping(Value) => #2
    GroupWorkflow "Find patch" => #3
        SubscribeSubject WheelPos => #0
        -> Take(Count=1) => #1
        #1, #0 -> CombineLatest
        -> Subtract
        -> Bonsai.Dsp.Abs
        -> WorkflowOutput
    #2, #3 -> GreaterThan(Operand=IntProperty(Value=100))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Odor
    -> WorkflowOutput
-> SelectMany "Run Past" => #2
    SubscribeSubject LocationLength
    -> IntProperty(Value=50)
    -> PropertyMapping(Value) => #2
    GroupWorkflow "Run Past distance" => #3
        SubscribeSubject WheelPos => #0
        -> Take(Count=1) => #1
        #1, #0 -> CombineLatest
        -> Subtract
        -> Bonsai.Dsp.Abs
        -> WorkflowOutput
    #2, #3 -> GreaterThan(Operand=IntProperty(Value=50))
    -> DistinctUntilChanged
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Odor
    -> WorkflowOutput
    #6 -> BooleanProperty(Value=false)
    -> MulticastSubject Stopped
#1 -> SelectMany Stop => #3
    SubscribeSubject SpeedThreshold
    -> IntProperty(Value=2)
    -> PropertyMapping(Value) => #2
    SubscribeSubject Speed => #3
    #2, #3 -> LessThan(Operand=FloatProperty(Value=2))
    -> DistinctUntilChanged
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Odor
    -> WorkflowOutput
    #6 -> BooleanProperty(Value=true)
    -> MulticastSubject Stopped
    #6 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort0))
    -> MulticastSubject BehaviorCommands
#2, #3 -> Merge
-> Take(Count=1)
-> Sink "Evaluate Transition"
    SubscribeSubject Stopped
    -> DistinctUntilChanged => #1
    -> Condition Stopped!
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject ITI => #4
    #1 -> BitwiseNot
    -> Condition runPast! => #6
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject OdorPatch => #7
    #6, #7 -> Zip
    -> MemberSelector(Selector=Item2) => #9
    -> Condition WasPatch1?
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=2)
    -> MulticastSubject OdorPatch
    -> BooleanProperty(Value=true)
    -> MulticastSubject ITI => #14
    #9 -> Condition WasPatch2?
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> MulticastSubject OdorPatch
    -> BooleanProperty(Value=true)
    -> MulticastSubject ITI => #19
    #4, #14, #19 -> Zip
    -> WorkflowOutput
-> Repeat

GroupWorkflow "Odor trigger"
    SubscribeSubject Odor
    -> DistinctUntilChanged => #1
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject OdorPatch => #3
    #2, #3 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #5
    -> Condition Odor1
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
    -> MulticastSubject BehaviorCommands
    #5 -> Condition Odor2
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
    -> MulticastSubject BehaviorCommands
    #1 -> BitwiseNot
    -> Condition => #13
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject OdorPatch => #14
    #13, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #16
    -> Condition Odor1
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort1))
    -> MulticastSubject BehaviorCommands
    #16 -> Condition Odor2
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort2))
    -> MulticastSubject BehaviorCommands

GroupWorkflow "Visual Display"
    SubscribeSubject WheelPos
    -> Bonsai.Dsp.Rescale(Min=0, Max=1081, RangeMin=0, RangeMax=60, RescaleType=Clamp)
    -> Multiply(Operand=FloatProperty(Value=0.5))
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=19.871212)
    -> BehaviorSubject CurrentPosition

    Bonsai.Shaders.CreateWindow
      Width=3060
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=-4100, Y=-500)
      WindowBorder=Fixed
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_ceiling
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\random_ceiling.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_walls_2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\random_walls_2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\random_floor.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #11
    SubscribeSubject CurrentPosition
    -> PropertyMapping(Eye) => #13
    #11, #13 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=19.871212), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3D
    -> Bonsai.Shaders.RenderCubemap
      RenderState=""
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      FaceSize=nil
      InternalFormat=Rgb
      MinFilter=Linear
      MagFilter=PixelTexGenQFloorSgix
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=1, Height=1, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0.1))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

    Disable Bonsai.Shaders.Input.MouseWheel
    -> Disable MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Disable Multiply(Operand=FloatProperty(Value=-0.05))
    -> Disable Accumulate
    -> Disable InputMapping(Z(Selector=it))
    -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=14.9000292)
    -> Disable BehaviorSubject CurrentPosition

    GroupWorkflow Ceiling
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_ceiling, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=2
          TranslationZ=1
          RotationZ=180
          RotationY=180
          RotationX=90
          ScaleX=1.59523809
          ScaleY=100
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

    GroupWorkflow Left
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=0
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=3
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=6
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=9
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=12
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=15
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=18
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=21
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=24
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=27
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=30
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=33
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=36
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=39
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=42
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=45
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=48
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=51
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=54
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=57
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=1.5
          TranslationZ=60
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

    GroupWorkflow Right
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=0
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=3
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=6
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=9
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=12
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=15
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=18
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=21
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=24
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=27
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=30
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=33
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=36
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=39
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=42
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=45
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=48
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=51
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=54
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=57
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=60
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=1.5
          TranslationZ=63
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=3
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

    GroupWorkflow Floor
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=3
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=6
          RotationZ=0
          RotationY=-180
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=9
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=12
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=15
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=18
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=21
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=24
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=27
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=30
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=33
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=36
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=39
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=42
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=45
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=48
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=51
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=54
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=57
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=60
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=4
          ScaleY=5
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

GroupWorkflow Cameras
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #0
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_top.avi))
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.Vision.VideoWriter
      FileName=test3_top.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=15
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="") => #5
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_bottom.avi))
    -> PropertyMapping(FileName) => #8
    #5, #8 -> Bonsai.Vision.VideoWriter
      FileName=test3_bottom.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=15
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

GroupWorkflow Save
    Disable SubscribeSubject Prefix
    -> Disable Add(Operand=StringProperty(Value=_rotary.csv))
    -> Disable PropertyMapping(FileName) => #2
    Disable SubscribeSubject AbsolutePosition => #3
    Disable SubscribeSubject Cross => #4
    Disable SubscribeSubject WheelPos => #5
    Disable SubscribeSubject LickTime => #6
    #2, #3, #4, #5, #6 -> Disable CombineLatest
    -> Disable Bonsai.IO.CsvWriter(FileName=fdsg.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> Disable Bonsai.IO.CsvWriter
      FileName=TO675373_Day5_rotary.csv
      ListSeparator=","
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=true
      Selector="Item2.Value,Item2.Timestamp.Hour,Item2.Timestamp.Minute,Item2.Timestamp.Second,Item2.Timestamp.Millisecond"

    StringProperty(Value=test) => #10
    IntProperty(Value=3)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
      Expression: it.ToString()
    #10, #12 -> Zip
    -> Add
    -> ReplaySubject Prefix(BufferSize=nil)

    PropertySource<Bonsai.IO.CsvWriter,System.String>(MemberName=FileName)
    -> Take(Count=1)
    -> AsyncSubject RootPath

    SubscribeSubject "Behavior Events"
    -> GroupWorkflow LogHarpDemux
        WorkflowInput Source1
        -> GroupBy(KeySelector="Address,MessageType") => #1
        ExternalizedMapping(LogName) => #2
        #1, #2 -> SelectMany LogHarp
            WorkflowInput Source1
            -> AsyncSubject Data

            SubscribeSubject RootPath => #2
            ExternalizedMapping(Value(DisplayName=LogName))
            -> StringProperty(Value=BehaviorEvents)
            -> Take(Count=1) => #5
            SubscribeSubject Data
            -> MemberSelector(Selector=Key) => #7
            #2, #5, #7 -> Zip
            -> Format(Format={0}/{1}/{2}_{3}.bin, Selector="Item1,Item2,Item3.Item2,Item3.Item1")
            -> AsyncSubject LogName

            SubscribeSubject Data
            -> Merge
            -> MemberSelector(Selector=MessageBytes) => #13
            SubscribeSubject LogName
            -> PropertyMapping(Path(Selector=it)) => #15
            #13, #15 -> Bonsai.Dsp.MatrixWriter(Path=/BehaviorEvents/Read_122.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput

GroupWorkflow "Keydown options"
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> PublishSubject LickKeyPress

    Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0))
    -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort1))
    -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort2))
    -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
    -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D5, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
    -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D5, SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
    -> MulticastSubject BehaviorCommands

GroupWorkflow Init
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject "Behavior Events"

    IntProperty(Value=80)
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDOPort0)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject "Behavior Events"
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1
        -> MemberSelector(Selector=Encoder)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Dsp.Rescale(Min=-32767, Max=32767, RangeMin=0, RangeMax=1081, RescaleType=Clamp) => #10
    -> BehaviorSubject WheelPos
    #10 -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.Difference(Order=1)
    -> Condition DetectTurnRestart
        WorkflowInput Source1
        -> LessThan(Operand=DoubleProperty(Value=-3))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> First
    -> Repeat
    -> Accumulate
    -> Multiply(Operand=DoubleProperty(Value=1081))
    -> MulticastSubject TurnPos

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject Odor

    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Take(Count=1)
    -> BehaviorSubject OdorPatch

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="SupplyPort1 SupplyPort2"))
    -> MulticastSubject BehaviorCommands

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject Stopped

    Disable SubscribeSubject WheelPos
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable Multiply(Operand=DoubleProperty(Value=1000))
    -> Disable BehaviorSubject Speed

    SubscribeSubject WheelPos
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=1000))
    -> Bonsai.Dsp.Buffer(Count=100, Skip=nil) => #40
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #42
    #40 -> MemberSelector(Selector=Cols)
    -> PropertyMapping(Value) => #44
    #42, #44 -> Divide(Operand=DoubleProperty(Value=100))
    -> BehaviorSubject Speed

    BooleanProperty(Value=true)
    -> IgnoreElements
    -> BehaviorSubject ITI

    IntProperty(Value=0)
    -> BehaviorSubject TurnPos

    SubscribeSubject WheelPos => #52
    SubscribeSubject TurnPos => #53
    #52, #53 -> WithLatestFrom
    -> Add
    -> BehaviorSubject AbsolutePosition

    IntProperty(Value=150)
    -> PublishSubject FindLocation

    IntProperty(Value=100)
    -> PublishSubject LocationLength

    IntProperty(Value=2)
    -> PublishSubject SpeedThreshold

GroupWorkflow Breathing
    SubscribeSubject "Behavior Events"
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #1
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=AnalogInput0) => #3
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=0.05, Cutoff2=20, KernelLength=50, FilterType=BandPass)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Dsp.Buffer(Count=100, Skip=100)
        -> Bonsai.Vision.ResizeCanvas(Size(Width=100, Height=1), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset=nil)
        -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
        -> Bonsai.Dsp.DetectSpikes(Delay=25, Length=50, Threshold(double=0.01), WaveformRefinement=AlignPeaks)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> BehaviorSubject BreathIn
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=SampleIndex)
        -> WorkflowOutput
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector=it, SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
    -> Subtract(Operand=WorkflowProperty<System.Int16>(Value=850)) => #6
    #3 -> Disable Index(Operand=IntProperty(Value=2))
    -> Disable Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector=it, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
    -> Disable Subtract(Operand=WorkflowProperty<System.Int16>(Value=1100)) => #9
    #1 -> MemberSelector(Selector=Seconds) => #10
    #6, #9, #10 -> Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as ADC0,
        Item2 as ADC1,
        Item3 as Seconds)
    -> Disable Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector="ADC0,ADC1", SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil) => #13
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_breathing.csv))
    -> PropertyMapping(FileName) => #16
    #13, #16 -> Bonsai.IO.CsvWriter(FileName=test3_breathing.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> WorkflowOutput

GroupWorkflow LickDetection
    SubscribeSubject "Behavior Events"
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #1
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    #6, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LickTime
    -> WorkflowOutput
